PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Script.xlsx', 'Point2.wav', 'Point1.wav']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Group
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
      stopVal [duration (s)] = 5
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = click!
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
  Routine Button_Click_2
    RoutineSettingsComponent Button_Click_2
      saveStartStop = False
      stopVal [duration (s)] = 100
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    MouseComponent mouse
      clickable = button
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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    PolygonComponent button
      fillColor = red
      opacity = CircleOn
      saveStartStop = False
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0
      stopVal [condition] = False
      units = height
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    PolygonComponent PointsBox1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = black
      pos = (-0.5, 0.875)
      saveStartStop = False
      shape = rectangle
      size = (1,0.25)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      units = norm
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    PolygonComponent PointsBox2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = black
      pos = (0.5, 0.875)
      saveStartStop = False
      shape = rectangle
      size = (1,0.25)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      units = norm
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    TextComponent Points1Text
      letterHeight = 0.05
      pos = (-0.5, 0.875)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      units = norm
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      text [set every frame]:
        $point1
    TextComponent Points2text
      letterHeight = 0.05
      pos = (0.5, 0.875)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      text [set every frame] = $point2
      units = norm
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        point1 = 0;
        point2 = 0;
        Visual1Timer = new util.Clock();
        Visual2Timer = new util.Clock();
        Visual1Timer.reset();
        Visual2Timer.reset();
        CircleOn = 1;
        xpos = 0;
        ypos = 0;
        RunTimer = new util.Clock();
        RunTimer.reset();
      Begin JS Routine:
        CircleOn = 1;
        MouseTimer = new util.Clock();
        MouseTimer.reset();
        DROTimer = new util.Clock();
        DROTimer.reset();
        FITimer = new util.Clock();
        FITimer.reset();
        FTTimer = new util.Clock();
        FTTimer.reset();
        PhaseTimer = new util.Clock();
        PhaseTimer.reset();
        psychoJS.window.color = new util.Color(BackgroundColor);
        PointsBox1.setFillColor(BackgroundColor);
        PointsBox2.setFillColor(BackgroundColor);
      Each JS Frame:
        function PointAwarded(Reason) {
            point1 += Points1;
            point2 += Points2;
            if ((Points1 !== 0)) {
                Visual1Timer.reset();
                Sound1.play();
            }
            if ((Points2 !== 0)) {
                Visual2Timer.reset();
                Sound2.play();
            }
             TimeStampData()
             psychoJS.experiment.addData("datatype", "PointEarned")
             psychoJS.experiment.addData("ReasonforPoint", Reason)
             psychoJS.experiment.addData("TotalPoints1", point1)
             psychoJS.experiment.addData("TotalPoints2", point2)
             psychoJS.experiment.nextEntry()
        }
        function TimeStampData() {
             psychoJS.experiment.addData("RunTimer", RunTimer.getTime())
             psychoJS.experiment.addData("PhaseTimer", PhaseTimer.getTime())

             psychoJS.experiment.addData("CurentPhase", PhaseName)
        }

        if ((mouse.isPressedIn(button) && (CircleOn === 1))) {
            CircleOn = 0;
            x = psychoJS.window.size[0];
            y = psychoJS.window.size[1];
            button.setOpacity(0);
            button.setPos([(((Math.random() * ((x / y) - 0.05)) - ((x / y) / 2)) + 0.025), ((Math.random() * 0.8) - 0.45)], {"log": false});
            MouseTimer.reset();
            DROTimer.reset();

            if (((Reinforcement_Schedule === "FI") && (FITimer.getTime() > Reinforcement_Variable))) {
                new PointAwarded("FI click");
                FITimer.reset();
            }
            TimeStampData()
            psychoJS.experiment.addData("datatype", "ButtonClicked")
            psychoJS.experiment.addData("TotalPoints1", point1)
            psychoJS.experiment.addData("TotalPoints2", point2)
            psychoJS.experiment.nextEntry()
        }
        if ((MouseTimer.getTime() > 0.3)) {
            CircleOn = 1;
            button.setOpacity(1);
        }
        //Turns point colors on and off
        if ((PhaseTimer.getTime() > 0.8)) {
            if ((Visual1Timer.getTime() < 0.8)) {
                PointsBox1.setFillColor([0.0, 0.9059, 0.0]);
            } else {
                PointsBox1.setFillColor(BackgroundColor);
            }
            if ((Visual2Timer.getTime() < 0.8)) {
                PointsBox2.setFillColor([0.2, -0.6078, 0.6]);
            } else {
                PointsBox2.setFillColor(BackgroundColor);
            }
        }
        if (((Reinforcement_Schedule === "DRO") && (DROTimer.getTime() > Reinforcement_Variable))) {
            new PointAwarded("DRO");
            DROTimer.reset();
        }
        if (((Reinforcement_Schedule === "FT") && (FTTimer.getTime() > Reinforcement_Variable))) {
            new PointAwarded("FT");
            FTTimer.reset();
        }
        if ((PhaseTimer.getTime() > Duration)) {
            continueRoutine = false;
            TimeStampData()
            psychoJS.experiment.addData("datatype", "PhaseChange")
            psychoJS.experiment.addData("TotalPoints1", point1)
            psychoJS.experiment.addData("TotalPoints2", point2)
            psychoJS.experiment.nextEntry()
        }
    SoundComponent Sound1
      saveStartStop = False
      sound [set every repeat] = Point1.wav
      startVal [condition] = False
      syncScreenRefresh = False
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    SoundComponent Sound2
      saveStartStop = False
      sound [set every repeat] = Point2.wav
      startVal [condition] = False
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    PolygonComponent PointSymbol1
      fillColor = white
      nVertices = 9
      pos [set every frame] = ((psychoJS.window.size[0]/psychoJS.window.size[1])*-0.29,0.44)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      units = height
      vertices = 9
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    PolygonComponent PointSymbol2
      fillColor = 1.0000, 0.7882, 0.5373
      pos [set every frame] = ((psychoJS.window.size[0]/psychoJS.window.size[1])*0.2,0.44)
      saveStartStop = False
      shape = triangle
      size = (0.07,0.07)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      units = height
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  Routine TestClicking
    RoutineSettingsComponent TestClicking
      stopVal [duration (s)] = 5
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    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine GoodbyePage
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ByeBye
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Script.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Order': 1, 'PhaseName': 'ResponseTraining', 'Reinforcement_Schedule': 'FI', 'Reinforcement_Variable': 3, 'Duration': 15, 'Points1': 1, 'Points2': 0, 'BackgroundColor': 'Yellow'},
      {'Order': 2, 'PhaseName': 'DRO', 'Reinforcement_Schedule': 'DRO', 'Reinforcement_Variable': 3, 'Duration': 15, 'Points1': 0, 'Points2': 1, 'BackgroundColor': 'Green'},
      {'Order': 3, 'PhaseName': 'Reinstatement Test', 'Reinforcement_Schedule': 'FT', 'Reinforcement_Variable': 3, 'Duration': 15, 'Points1': 1, 'Points2': 0, 'BackgroundColor': 'Red'},
      {'Order': 4, 'PhaseName': 'Reacquisition', 'Reinforcement_Schedule': 'FI', 'Reinforcement_Variable': 3, 'Duration': 15, 'Points1': 1, 'Points2': 0, 'BackgroundColor': 'Blue'},
      {'Order': None, 'PhaseName': None, 'Reinforcement_Schedule': None, 'Reinforcement_Variable': None, 'Duration': None, 'Points1': None, 'Points2': None, 'BackgroundColor': None},
      {'Order': None, 'PhaseName': None, 'Reinforcement_Schedule': None, 'Reinforcement_Variable': None, 'Duration': None, 'Points1': None, 'Points2': None, 'BackgroundColor': None},
      {'Order': None, 'PhaseName': None, 'Reinforcement_Schedule': None, 'Reinforcement_Variable': None, 'Duration': None, 'Points1': None, 'Points2': None, 'BackgroundColor': None},
      {'Order': None, 'PhaseName': None, 'Reinforcement_Schedule': None, 'Reinforcement_Variable': None, 'Duration': None, 'Points1': None, 'Points2': None, 'BackgroundColor': None}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
    Routine Button_Click_2
  LoopTerminator trials
  Routine GoodbyePage
